PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'saliva_', 'physio': '1', '': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = 1.0000, 1.0000, 1.0000
  expName = MIST_for_Saliva
  keyboardBackend = ioHub
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Routines
  Routine feedback
    CodeComponent TTL_3
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("03".encode())
      End Routine:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("RR".encode())
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        if slider_kbControl.rating == answer:
            thisfeedback = 'Correct'
            thiscolor = 'Green'
        else:
            thisfeedback = 'Incorrect'
            thiscolor = 'Red'
      Begin Routine:
        if slider_kbControl.rating == answer:
            thisfeedback = 'Correct'
            thiscolor = 'Green'
        else:
            thisfeedback = 'Incorrect'
            thiscolor = 'Red'
      End Routine:
        down_active=True
    TextComponent feedbacktxt
      color [set every repeat] = $thiscolor
      letterHeight = 0.1
      pos = (0, -.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $thisfeedback
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    CodeComponent fb_data
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('feedback', thisfeedback)
  Routine end
    CodeComponent TTL_10
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("10".encode())
      End Experiment:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("RR".encode())
    TextComponent end_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Congratulations, you have finished the task! Please let the experimenter know that you have finished. You may press the down key to end the task.
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    KeyboardComponent key_resp
      allowedKeys = 'down','k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start
    KeyboardComponent space_to_continue
      allowedKeys = 'down','k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent start_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Welcome! Today, we will be asking you to watch some videos and solve some arithmetic problems. We are interested in how your body responds during performance of demanding tasks. In order to make sure the electrodes record clear data, we ask that you move as little as possible during this task. When you continue, you will watch a short video. Please keep your eyes open and minimize your movements for the duration. Press the down key to continue.
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  Routine end_loop
  Routine stop_loop
    CodeComponent loop_time_limit
      Code Type = Auto->JS
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      Begin Experiment:
        countdown_started = False
      Begin Routine:
        if not countdown_started:
            countdownClock = core.CountdownTimer(115)
            countdown_started = True
      Each Frame:
        timeRemaining = countdownClock.getTime()
        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            practice.finished = True # and terminate the loop (use its actual name)
            countdown_started = False # only necessary if you'll be using the countdown again elsewhere
  Routine end_practice
    CodeComponent TTL_4
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("04".encode())
      End Routine:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("RR".encode())
    TextComponent end_practice_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for completing the practice. In this next portion, you will have a limited amount of time to solve each problem. The amount of time you have may vary from problem to problem. At the top of the next screen, you will see a tracker that indicates your accuracy. Below that, you will see a timer, which will indicate how much time you have remaining when you have 3 seconds or less left to solve the problem. Please try your best to be accurate, as we cannot use your data if your accuracy is too far below average. The experimenter will be tracking your performance. This portion will last 2.5 minutes total. Press the down key to continue.
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    KeyboardComponent space_continue
      allowedKeys = 'down','k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent set_timer_
      Code Type = Auto->JS
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      Begin Routine:
        timer = rt_avg
        rt_list=[rt_avg]
        correct_list=[]
        countdown_started = False
        timer_started=False
        timerRemaining=0
  Routine trial_untimed
    CodeComponent TTL_2
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("02".encode())
      End Routine:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("RR".encode())
    CodeComponent slider_code
      Code Type = Py
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      Before Experiment:
        import random
      Begin Experiment:
        expression = 'expression' #setting blank variables
        answer = 'answer'
      Begin Routine:
        event.clearEvents() #this prevents a response
        #from accidentally registering between trials
      Each Frame:
        if slider_kbControl.markerPos is None:
            # sets to our first position (4 or 5)
            # and makes marker visible
            slider_kbControl.markerPos = random.randint(4,5)
        #check keys (just the ones we want)
        keysPressed = event.getKeys(['j', 'l', 'k'])
        for key in keysPressed:
            if key == 'j':
                slider_kbControl.markerPos -= 1  # subtract 1
            elif key == 'l':
                slider_kbControl.markerPos += 1  # add 1
            elif key == 'k':
                # confirm rating by setting to current markerPos
                slider_kbControl.rating= slider_kbControl.markerPos
                ContinueRoutine = False
    TextComponent arithmetic_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.08
      pos = (0, -.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $expression+" = ?"
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    SliderComponent slider_kbControl
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      granularity = 0
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9)
      letterHeight = 0.03
      pos = (0, -0.32)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9)
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    KeyboardComponent returnkey
      allowedKeys [set every repeat] = 'down','k'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent averageRT
      Code Type = Auto->JS
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      Before Experiment:
        rt_list=[]
        from statistics import mean
      End Routine:
        if isinstance(returnkey.rt,list):
            returnkey.rt=float(0)
        rt_list.append(returnkey.rt)
        rt_avg = mean(rt_list)
  Routine trial_timed
    CodeComponent TTL_5
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['physio'] == '1':
            if run_1.finished == False :
                USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
                USBTTL.write("04".encode())
            else :
                USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
                USBTTL.write("07".encode())
        # if run 1 is ongoing, encode 04
        # if run 1 is not ongoing, encode 07
      End Routine:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("RR".encode())
    CodeComponent slider_code_2
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Experiment:
        expression = 'uh oh'
        answer = 'hope this code works!'
      Begin Routine:
        event.clearEvents() #this prevents a response
        #from accidentally registering between trials
      Each Frame:
        if slider_kbControl2.markerPos is None:
            # sets to our first position (4 or 5)
            # and makes marker visible
            slider_kbControl2.markerPos = random.randint(4,5)
        #check keys (just the ones we want)
        keysPressed = event.getKeys(['j', 'l', 'k'])
        for key in keysPressed:
            if key == 'j':
                slider_kbControl2.markerPos -= 1  # subtract 1
            elif key == 'l':
                    slider_kbControl2.markerPos += 1  # add 1
            elif key == 'k':
                    # confirm rating by setting to current markerPos
                    timer_started = False #reset timer
                    slider_kbControl2.rating= slider_kbControl2.markerPos
                    continueRoutine = False
    TextComponent arithmetic_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.08
      pos = (0, -.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $expression+" = ?"
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    SliderComponent slider_kbControl2
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9)
      letterHeight = 0.03
      pos = (0, -0.32)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9)
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    KeyboardComponent returnkey_2
      allowedKeys = 'down','k'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent accuracy
      Code Type = Auto->JS
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      Before Experiment:
        accuracy_list = []
        accuracy = None
        accuracy_str = 'NA'
      Begin Routine:
        if isinstance(accuracy, float):
            accuracy_slider.markerPos = accuracy
        else:
            accuracy_slider.markerPos = None
      Each Frame:
        if isinstance(accuracy, float):
            accuracy_slider.markerPos = accuracy
        else:
            accuracy_slider.markerPos = None
      End Routine:
        if too_slow == True:
            accuracy_list.append(0)
        elif slider_kbControl2.rating == answer:
            accuracy_list.append(1)
        elif slider_kbControl2.rating != answer:
            accuracy_list.append(0)

        accuracy = mean(accuracy_list)
        accuracy_str = str(round(100*accuracy,2))
    TextComponent accuracy_text
      color = -0.1765, -0.1765, -0.1765
      letterHeight = 0.03
      pos = (0, .45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Your accuracy is: ' + accuracy_str + '%'
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    SliderComponent accuracy_slider
      borderColor = -0.1765, -0.1765, -0.1765
      color = -0.1765, -0.1765, -0.1765
      forceEndRoutine = False
      granularity = 0
      labels = ('0%', '80% (Average Accuracy)', '100%')
      letterHeight = 0.02
      pos = (0, .4)
      readOnly = True
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0,.8,1)
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    CodeComponent timer
      Code Type = Auto->JS
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      Before Experiment:
        too_slow=False
      Begin Routine:
        if timer_started is False:
            timerClock = core.CountdownTimer(timer) #start
            too_slow = False #reset too_slow
            timer_started = True #start timer

        if timer > 3:
            time_slider.markerPos = None
        else:
            time_slider.markerPos = timer
      Each Frame:
        timerRemaining = timerClock.getTime() #check time remaining
        if timerRemaining <= -0.01: #Triggers 1 ms after
            #time is up
            too_slow = True #record "too_slow"
            slider_kbControl2.rating = None #record rating
            #as None
            timer_started = False #reset timer
            continueRoutine = False # end this trial immediately

        if timerRemaining > 3:
            time_slider.markerPos = None
        else:
            time_slider.markerPos = timerRemaining
    SliderComponent time_slider
      borderColor = -0.1765, -0.1765, -0.1765
      color = -0.1765, -0.1765, -0.1765
      forceEndRoutine = False
      granularity = 0
      labels = ('0 Seconds Left', '3 Seconds Left')
      letterHeight = 0.03
      pos = (0, 0.2)
      readOnly = True
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = scrollbar
      ticks = (0,3)
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    TextComponent Time_Remaining_txt
      color = -0.1765, -0.1765, -0.1765
      letterHeight = 0.03
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Your time remaining:
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    CodeComponent timer_data
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('timer', timer)
  Routine feedback_timed
    CodeComponent TTL_6
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['physio'] == '1':
            if run_1.finished == False :
                USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
                USBTTL.write("05".encode())
            else :
                USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
                USBTTL.write("08".encode())
        # if run 1 is ongoing, encode 04
        # if run 1 is not ongoing, encode 07
      End Routine:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("RR".encode())
    CodeComponent accuracy2
      Code Type = Auto->JS
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      Begin Routine:
        if isinstance(accuracy, float):
            accuracy_slider2.markerPos = accuracy
        else:
            accuracy_slider2.markerPos = None
      Each Frame:
        if isinstance(accuracy, float):
            accuracy_slider2.markerPos = accuracy
        else:
            accuracy_slider2.markerPos = None
      End Routine:
        #if too_slow == True:
        #    accuracy_list.append(0)
        #elif slider_kbControl2.rating == answer:
        #    accuracy_list.append(1)
        #elif slider_kbControl2.rating != answer:
        #    accuracy_list.append(0)
        #
        #accuracy = mean(accuracy_list)
    TextComponent accuracy_text2
      color = -0.1765, -0.1765, -0.1765
      letterHeight = 0.03
      pos = (0, .45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $'Your accuracy is: ' + accuracy_str + '%'
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    SliderComponent accuracy_slider2
      borderColor = -0.1765, -0.1765, -0.1765
      color = -0.1765, -0.1765, -0.1765
      forceEndRoutine = False
      granularity = 0
      labels = ('0%', '80% (Average Accuracy)', '100%')
      letterHeight = 0.02
      pos = (0, .4)
      readOnly = True
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0,.8,1)
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    CodeComponent adjust_timer
      Code Type = Auto->JS
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      Begin Routine:
        #note: in the code in "end_practice", rt_list
        #and timer are both set to the rt_avg that was
        #calculated in practice

        #update the correct_list
        if too_slow == True:
            correct_list.append(-1)
        elif slider_kbControl2.rating == answer:
            correct_list.append(1) #1 is correct ans
        else:
            correct_list.append(-1) #-1 is incorrect ans

        #remove oldest item in list
        if len(correct_list)>3:
            correct_list = correct_list[1:]

        #if rt is empty list (happens when participant mashes
        #down key so no rt is recorded), make it timer
        if isinstance(returnkey_2.rt,list):
            returnkey_2.rt=timer

        #append rt to rt_list (or timer if rt=None)
        if too_slow == True:
            rt_list.append(timer)
        else:
            rt_list.append(returnkey_2.rt)

        #keep rt_list to last 3 variables
        if len(rt_list)>3:
            rt_list = rt_list[1:]

        #if 3 consecutive correct, shorten timer
        if sum(correct_list)==3:
            timer = 0.90 * mean(rt_list)
            #this is deviation from
            #original MIST, which averages past 3 RTs

        #if 3 consecutive incorrect, extend timer
        if sum(correct_list)==-3:
            timer = 1.10 * mean(rt_list)

        #if timer is less than 1 sec, make it 1 sec
        if timer<1:
            timer = 1
    CodeComponent feedback_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        if too_slow == True:
            thisfeedback = 'Too Slow'
            thiscolor = 'Red'
        elif slider_kbControl2.rating == answer:
            thisfeedback = 'Correct'
            thiscolor = 'Green'
        else:
            thisfeedback = 'Incorrect'
            thiscolor = 'Red'
      Begin Routine:
        if too_slow == True:
            thisfeedback = 'Too Slow'
            thiscolor = 'Red'
        elif slider_kbControl2.rating == answer:
            thisfeedback = 'Correct'
            thiscolor = 'Green'
        else:
            thisfeedback = 'Incorrect'
            thiscolor = 'Red'
    TextComponent feedbacktxt_2
      color [set every repeat] = $thiscolor
      letterHeight = 0.1
      pos = (0, -.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $thisfeedback
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    CodeComponent fb_data_2
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('feedback', thisfeedback)
  Routine adjust_timer_2
    CodeComponent adjust_timer_code
      Code Type = Auto->JS
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      Before Experiment:
        from statistics import mean
      Begin Experiment:
        correct_list = []
  Routine load
    ResourceManagerComponent resources_2
      actionType = Start and Check
      checkAll = True
      forceEndRoutine = True
      resources = ['arithmetic.xlsx']
      startVal [time (s)] = 0
    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Task is loading...
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  Routine start2
    CodeComponent TTL_1
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        #if expInfo['physio'] == '1':
        #    import serial
        #    USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
        #    USBTTL.write("00".encode())
        #    USBTTL.write("RR".encode())
      Begin Routine:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("01".encode())
    KeyboardComponent space_to_continue_2
      allowedKeys = 'down','k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent start_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = The next part of this task will be the practice portion. You will be solving arithmetic problems for 2 minutes. These problems will be untimed, and we will not record your accuracy. After the practice, there will be 2 test portions. In the test portions, the problems will be timed and your accuracy will be recorded. Press the down key to continue.
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  Routine start3
    KeyboardComponent space_to_continue_3
      allowedKeys = 'down','k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent start_text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = While you complete this task, the experimenter will be available to answer any questions you may have and to track your progress. Please keep in mind that your accuracy must be near 80% (average performance for university students) in order for your data to be useable. Press the down key to continue.
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  Routine start4
    KeyboardComponent space_to_continue_4
      allowedKeys = 'down','k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent start_text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = On the next screen, you will see an arithmetic problem. There will be a slider at the bottom of the screen. Use the left and right arrow keys to move the marker on the slider. To lock in your answer, press the down key. The answer will always be an integer from 0 to 9. Do not press the down key until you have seen the problem. Please solve the problems as fast as you can and try to be as accurate as possible. Press the down key to begin the practice.
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  Routine end_run1
    CodeComponent TTL_7
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("06".encode())
      End Routine:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("00".encode())
    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $'You have completed the 1st test portion of this task. Please let the experimenter know that you have completed the 1st test portion.'
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    KeyboardComponent c_continue
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stress_check
    CodeComponent TTL_8
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("08".encode())
      End Experiment:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("RR".encode())
    TextComponent stress_check_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How stressful was this task?
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    CodeComponent stress_slider_code
      Code Type = Py
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      Before Experiment:
        import random
      Begin Experiment:
        expression = 'expression' #setting blank variables
        answer = 'answer'
      Begin Routine:
        event.clearEvents() #this prevents a response
        #from accidentally registering between trials
      Each Frame:
        if slider.markerPos is None:
            # sets to our first position
            # and makes marker visible
            slider.markerPos = 5
        #check keys (just the ones we want)
        keysPressed = event.getKeys(['j', 'l', 'k'])
        for key in keysPressed:
            if key == 'j':
                slider.markerPos -= 1  # subtract 1
            elif key == 'l':
                slider.markerPos += 1  # add 1
            elif key == 'k':
                # confirm rating by setting to current markerPos
                slider.rating= slider.markerPos
                ContinueRoutine = False
    SliderComponent slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.3255, 0.3255, 0.3255
      forceEndRoutine = True
      granularity = 0
      labels = ('Not stressful at all', 'Moderately stressful', 'As stressful as possible')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,5,10)
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  Routine video
    CodeComponent TTL_9
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['physio'] == '1':
            import serial
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("00".encode())
            USBTTL.write("RR".encode())
      Begin Routine:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("01".encode())
      End Routine:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("RR".encode())
    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = /Users/naomigancz/Library/CloudStorage/Box-Box/BABLAB/Studies/Inside_Out/private/Second Brain Study/task/inscapes.mov
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 200
      units = norm
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    KeyboardComponent c_continue_1
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 200
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  Routine video_post
    CodeComponent TTL_11_12
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("09".encode())
      End Routine:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("RR".encode())
    MovieComponent movie_2
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = /Users/naomigancz/Library/CloudStorage/Box-Box/BABLAB/Studies/Inside_Out/private/Second Brain Study/task/inscapes.mov
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 200
      units = norm
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    KeyboardComponent c_continue_4
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 200
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  Routine stai_s
  Routine stai_s_2
    CodeComponent TTL_13
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("13".encode())
      End Experiment:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("RR".encode())
    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $'You have completed the arithmetic portion of this task. Please let the experimenter know that you have completed the arithmetic portion.'
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    KeyboardComponent c_continue_2
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stai_s_1
    CodeComponent TTL
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("13".encode())
      End Experiment:
        if expInfo['physio'] == '1':
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            USBTTL.write("RR".encode())
    TextComponent text_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $'Please let the experimenter know you have completed the video.'
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    KeyboardComponent c_continue_3
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stop_loop_150s
    CodeComponent loop_time_limit_2
      Code Type = Auto->JS
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      Begin Experiment:
        countdown_started = False
      Begin Routine:
        if not countdown_started:
            countdownClock = core.CountdownTimer(120)
            countdown_started = True
      Each Frame:
        timeRemaining = countdownClock.getTime()
        if timeRemaining <= 0.0:
            countdown_started = False # only necessary if you'll be using the countdown again elsewhere
            continueRoutine = False # end this trial immediately
            run_1.finished = True # and terminate the loop (use its actual name)
  Routine stop_loop_150s_run2
    CodeComponent loop_time_limit_3
      Code Type = Auto->JS
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      Begin Experiment:
        countdown_started = False
      Begin Routine:
        if not countdown_started:
            countdownClock = core.CountdownTimer(120)
            countdown_started = True
      Each Frame:
        timeRemaining = countdownClock.getTime()
        if timeRemaining <= 0.0:
            countdown_started = False # only necessary if you'll be using the countdown again elsewhere
            continueRoutine = False # end this trial immediately
            run_2.finished = True # and terminate the loop (use its actual name)
Flow
  Routine start
  Routine video
  Routine start2
  Routine start3
  Routine start4
  Routine load
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = /Users/naomigancz/Library/CloudStorage/Box-Box/BABLAB/Studies/Inside_Out/private/Second Brain Study/task/MIST Psychopy/arithmetic.xlsx
    loopType = random
    nReps = 500
    random seed = 5
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    conditions:
      [{'expression': '6+0', 'answer': 6, 'difficulty': 'very easy'},
      {'expression': '0+3', 'answer': 3, 'difficulty': 'very easy'},
      {'expression': '1+4', 'answer': 5, 'difficulty': 'very easy'},
      {'expression': '0-0', 'answer': 0, 'difficulty': 'very easy'},
      {'expression': '2+4', 'answer': 6, 'difficulty': 'very easy'},
      {'expression': '3+2', 'answer': 5, 'difficulty': 'very easy'},
      {'expression': '6-4', 'answer': 2, 'difficulty': 'very easy'},
      {'expression': '3-1', 'answer': 2, 'difficulty': 'very easy'},
      {'expression': '9-3', 'answer': 6, 'difficulty': 'very easy'},
      {'expression': '0+1', 'answer': 1, 'difficulty': 'very easy'},
      {'expression': '7-2', 'answer': 5, 'difficulty': 'very easy'},
      {'expression': '2-2', 'answer': 0, 'difficulty': 'very easy'},
      {'expression': '6-3', 'answer': 3, 'difficulty': 'very easy'},
      {'expression': '9-5', 'answer': 4, 'difficulty': 'very easy'},
      {'expression': '0+0', 'answer': 0, 'difficulty': 'very easy'},
      {'expression': '6+2', 'answer': 8, 'difficulty': 'very easy'},
      {'expression': '9-9', 'answer': 0, 'difficulty': 'very easy'},
      {'expression': '6-5', 'answer': 1, 'difficulty': 'very easy'},
      {'expression': '8-5', 'answer': 3, 'difficulty': 'very easy'},
      {'expression': '3-0', 'answer': 3, 'difficulty': 'very easy'},
      {'expression': '6-6', 'answer': 0, 'difficulty': 'very easy'},
      {'expression': '4-0', 'answer': 4, 'difficulty': 'very easy'},
      {'expression': '0+0', 'answer': 0, 'difficulty': 'very easy'},
      {'expression': '1+2', 'answer': 3, 'difficulty': 'very easy'}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
    Routine trial_untimed
    Routine feedback
    Routine stop_loop
  LoopTerminator practice
  Routine end_practice
  Routine load
  LoopInitiator run_1 loopType="TrialHandler"
    conditionsFile = /Users/naomigancz/Library/CloudStorage/Box-Box/BABLAB/Studies/Inside_Out/private/Second Brain Study/task/MIST Psychopy/arithmetic.xlsx
    loopType = random
    nReps = 3000
    random seed = 1
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    conditions:
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    Routine trial_timed
    Routine feedback_timed
    Routine stop_loop_150s
  LoopTerminator run_1
  Routine end_run1
  Routine load
  LoopInitiator run_2 loopType="TrialHandler"
    conditionsFile = /Users/naomigancz/Library/CloudStorage/Box-Box/BABLAB/Studies/Inside_Out/private/Second Brain Study/task/MIST Psychopy/arithmetic.xlsx
    loopType = random
    nReps = 3000
    random seed = 97
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    conditions:
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    Routine trial_timed
    Routine feedback_timed
    Routine stop_loop_150s_run2
  LoopTerminator run_2
  Routine stress_check
  Routine video_post
  Routine end
